PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  color = 0.7255, 0.7255, 0.7255
  expName = TET_test
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Routines
  Routine anticipation
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # for practice trials:
        # anticipation routine repeats if spacebar is pressed during it
        # too_early_outer controls how many times too_early_inner can be repeated (really big number)
        early_hit = False

        startle_probe_sent = False

        # define size and time factors for image
        if distance == "far":
            size_factor = 16
            time_factor = 4
        elif distance == "near":
            size_factor = 2
            time_factor = 1
        elif distance == "none":
            size_factor = 1
            time_factor = 0

        # add these vars to auto output
        thisExp.addData('size_factor', size_factor)
        thisExp.addData('time_factor', time_factor)

        # set size of image, changes every repeat
        img_size = (x/size_factor, y/size_factor)

        # convert duration to seconds
        antic_img_dur = anticipation_dur/1000

        # convert startle start to seconds
        startle_t = startle_start/1000

        # only play startle on startle trials
        if startle:
            startle_dur = 1
        else:
            startle_dur = 0

        # assign unique codes for each condition start, end & startle
        # see new_markers.docx in dropbox for a table of the codes
        # update: I don't think marking the end of the stimulus is necessary
        if condition == 'Threat':
            if distance == 'none':
                hex_start = '04'
                #hex_end = '0C'
                hex_startle = '06'
            elif distance == 'far':
                hex_start = '14'
                #hex_end = '24'
                hex_startle = '16'
            else:
                hex_start = '44'
                #hex_end = '84'
                hex_startle = '46'
        else:
            if distance == 'none':
                hex_start = '08'
                #hex_end = '18'
                hex_startle = '0A'
            elif distance == 'far':
                hex_start = '28'
                #hex_end = '48'
                hex_startle = '2A'
            else:
                hex_start = '88'
                #hex_end = '10'
                hex_startle = '8A'

        # stimulus marker
        ser.write(str.encode(hex_start))
        time.sleep(0.005)
        ser.write(str.encode('00'))
      Each Frame:
        # startle probe marker (only once)
        if startle:
            if startle_sound.status == STARTED and startle_probe_sent == False:
                ser.write(str.encode(hex_startle))
                time.sleep(0.005)
                ser.write(str.encode('00'))
                startle_probe_sent = True

        if practice == 1:
            if len(_antic_resp_allKeys):
                continueRoutine = False
                early_hit = True
      End Routine:
        if startle:
            time_startle = startle_sound.tStartRefresh
            last_stim = time_startle

        if practice == 1 and not early_hit:
            too_early_inner.finished = True
            too_early_outer.finished = True

        # stimulus end
        #ser.write(str.encode(hex_end))
        #time.sleep(0.005)
        #ser.write(str.encode('00'))
    ImageComponent antic_img
      image [set every repeat] = $image
      size [set every repeat] = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $antic_img_dur
      units = pix
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    KeyboardComponent antic_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $antic_img_dur
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    SoundComponent startle_sound
      sound = sounds\whitenoise.wav
      startVal [time (s)] = $startle_t
      stopVal [duration (s)] = $startle_dur
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  Routine setup
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import time

        #Hide mouse
        win.mouseVisible = False

        # default (fullscreen) image size in pixels
        x = win.monitor.getSizePix()[0]
        y = win.monitor.getSizePix()[1]
        img_size = (x, y)

        # initialize variables, will be updated
        attack_dur = 0.25
        last_stim = 0

        # Setting up the serial port connection for triggering
        # the biopac and digitimer system.

        import serial
        ser = serial.Serial("COM4",115200, timeout=1)
        print(ser.name)

        # Check if the port is open, if it was not, open it.
        if(ser.isOpen() == False):
            ser.open()

        # set all pins to 0
        ser.write(str.encode('00'))


        # set up data output

        # custom VAS questionnaire file
        # File name
        custom_results_file = _thisDir + os.sep + u'data/%s_%s' % \
            (expInfo['participant'], expInfo['date']) + "_questionnaire_custom.csv"
        # open file for writing
        custom_q = open(custom_results_file,'w')
        # write column names
        custom_q.write('participant,stage,condition,distance,attack,startle,item_name,\
        item_text,response,RT\n')
      Begin Routine:
        #Hide mouse
        win.mouseVisible = False
  Routine attack
    ImageComponent attack_img
      image [set every repeat] = $image
      size [set every frame] = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      units = pix
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    KeyboardComponent attack_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # hit is False unless user presses spacebar in time
        hit = False

        scream_sent = False

        # define the duration of this attack
        duration = attack_dur*time_factor

        # find the total number of frames of this attack
        total_frames = (attack_dur*time_factor)*expInfo['frameRate']

        # initialize frame counter
        frame = 1

        # scream starts immediately after attack
        #scream_start = duration

        play_loud_scream = False
        play_weak_scream = False
        play_scream_sound = False

        if condition == "Threat" and attac:
            if practice == 0:
                play_loud_scream = True
                play_weak_scream = False
            elif practice == 2:
                play_loud_scream = False
                play_weak_scream = True
            else:
                play_loud_scream = False
                play_weak_scream = False
        else:
            play_loud_scream = False
            play_weak_scream = False

        '''
        # set scream duration
        if condition == "Threat" and attac:
            if practice == 0:
                loud_scream_dur = 1.0
                weak_scream_dur = 0.0
            elif practice == 2:
                loud_scream_dur = 0.0
                weak_scream_dur = 1.0
            else:
                loud_scream_dur = 0.0
                weak_scream_dur = 0.0
        else:
            loud_scream_dur = 0.0
            weak_scream_dur = 0.0
        '''

        # attack marker
        if attac and distance != "none":
            ser.write(str.encode('60'))
            time.sleep(0.005)
            ser.write(str.encode('00'))
      Each Frame:
        if attac and distance != "none":
            # calculate new dimensions of the image for each frame
            curr_x = x/size_factor + frame*(x-x/size_factor)/total_frames
            curr_y = y/size_factor + frame*(y-y/size_factor)/total_frames
            # apply new dimensions
            img_size = (curr_x, curr_y)
            # check if spacebar is pressed
            if len(_attack_resp_allKeys):
                hit = True
                continueRoutine = False
            frame = frame + 1

        attack_routine_time = t

        if play_loud_scream or play_weak_scream:
            if attack_routine_time >= duration:
                play_scream_sound = True
        else:
            if attack_routine_time >= duration:
                continueRoutine = False

        # send scream marker (if scream)
        if (loud_scream.status == STARTED or weak_scream.status == STARTED) \
            and scream_sent == False:
            if condition == "Threat" and attac and (practice == 0 or practice == 2):
                ser.write(str.encode('30'))
                time.sleep(0.005)
                ser.write(str.encode('00'))
                scream_sent = True

        if loud_scream.status == FINISHED or weak_scream.status == FINISHED:
            continueRoutine = False
      End Routine:
        if (practice == 0) and \
            (condition == "Threat" and attac and not hit) or \
            (condition == "Threat" and attac and distance == "none"):
            time_scream = loud_scream.tStartRefresh
            last_stim = time_scream
        elif (practice == 2) and \
            (condition == "Threat" and attac and not hit) or \
            (condition == "Threat" and attac and distance == "none"):
            time_scream = weak_scream.tStartRefresh
            last_stim = time_scream

        # ajdust time on 'near' trials
        # and in the real task on 'Threat' and 'near' trials
        if practice > 0 and distance == "near":
            if hit:
                attack_dur = attack_dur - 0.05
            else:
                attack_dur = attack_dur + 0.05
        elif practice == 0 and distance == "near" and condition == "Threat":
            if hit:
                attack_dur = attack_dur - 0.05
            else:
                attack_dur = attack_dur + 0.05
    SoundComponent loud_scream
      sound = sounds\scream.wav
      startVal [condition] = $play_loud_scream and play_scream_sound
      stopVal [duration (s)] = 1.0
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    SoundComponent weak_scream
      sound = sounds\screamweak.wav
      startVal [condition] = $play_weak_scream and play_scream_sound
      stopVal [duration (s)] = 1.0
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  Routine rest
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        print(tThisFlipGlobal)
        print(last_stim)
        print(startle_start)
        print(fix_adj)
        if practice == 1:
            fix_dur = 2
        else:
            if startle == True:
                fix_dur = 2.3 - (tThisFlipGlobal - last_stim) - startle_start + fix_adj
            else:
                if attac == True and condition == "Threat":
                    fix_dur = 2.3 - (tThisFlipGlobal - last_stim) - anticipation_dur + fix_adj
                else:
                    fix_dur = 2 - (tThisFlipGlobal - last_stim) - anticipation_dur + fix_adj
            if fix_dur < 1:
                fix_dur = random.uniform(1,3) # randomly select a float between 1&3 (both included)

        # add fix_dur to auto output
        thisExp.addData("fixation_duration", fix_dur)

        # fixation marker
        ser.write(str.encode('A0'))
        time.sleep(0.005)
        ser.write(str.encode('00'))
    TextComponent fixation
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_dur
      text = +
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  Routine rating_relief
    SliderComponent relief_slider
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ("neutral", "very pleasant")
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      styles = rating
      ticks = (0, 100)
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    TextComponent Instructions_relief
      color = green
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How pleasant was the relief that you felt?
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if (practice == 0 or practice == 2) and \
            (condition == "Threat" and attac and not hit) or \
            (condition == "Threat" and attac and distance == "none"):
            continueRoutine = False
        else:
            win.mouseVisible = True
            ser.write(str.encode('50'))  # rating marker
            time.sleep(0.005)
            ser.write(str.encode('00'))
      Each Frame:
        if relief_slider.status == FINISHED:
            continueRoutine = False
      End Routine:
        win.mouseVisible = False
        # save response if the slider was shown
        if (practice == 0 or practice == 2) and not\
            ((condition == "Threat" and attac and not hit) or \
            (condition == "Threat" and attac and distance == "none")):
            # define stage
            #if practice == 2:
            #    stage = 'habituation'
            #elif practice == 0:
            #    stage = 'real'

            # get the item text and strip newlines/spaces
            item_text = Instructions_relief.text.strip()

            # write entry into custom file
            custom_q.write(expInfo['participant'] +','+ stage +','+ condition +','+ \
                distance +','+ str(attac) +','+ str(startle) +','+ 'relief' +','+ item_text +','+ \
                str(relief_slider.getRating()) +','+ str(relief_slider.getRT()) + '\n')
  Routine rating_scream
    SliderComponent scream_slider
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ("neutral", "very unpleasant")
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      styles = rating
      ticks = (0, 100)
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    TextComponent Instructions_scream
      color = red
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How unpleasant was the scream that you heard?
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if (practice == 0 or practice == 2) and not\
            ((condition == "Threat" and attac and not hit) or \
            (condition == "Threat" and attac and distance == "none")):
            continueRoutine = False
        else:
            win.mouseVisible = True
            ser.write(str.encode('50'))  # rating marker
            time.sleep(0.005)
            ser.write(str.encode('00'))
      Each Frame:
        if scream_slider.status == FINISHED:
            continueRoutine = False
      End Routine:
        win.mouseVisible = False
        # save response if the slider was shown
        if (practice == 0 or practice == 2) and \
            (condition == "Threat" and attac and not hit) or \
            (condition == "Threat" and attac and distance == "none"):
            # define stage
            #if practice == 2:
            #    stage = 'habituation'
            #elif practice == 0:
            #    stage = 'real'

            # get the item text and strip newlines/spaces
            item_text = Instructions_scream.text.strip()

            # write entry into custom file
            custom_q.write(expInfo['participant'] +','+ stage +','+ condition +','+ \
                distance +','+ str(attac) +','+ str(startle) +','+ 'scream' +','+ item_text +','+ \
                str(scream_slider.getRating()) +','+ str(scream_slider.getRT()) + '\n')

        # clear channels
        #ser.write(str.encode('00'))
  Routine start_real_task
    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        The real experiment will start automatically in a few seconds.

        Remember to always push the spacebar as fast as you can when you see a picture growing in size.
  Routine start_habituation
    TextComponent hab_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will now start the second practice round. During this you will hear the white noises, and a low-volume version of the scream. In the real experiment, the scream will be played at full volume.

        After each trial you will also see relief and unpleasantness ratings. These rating screens will only be presented for 4 seconds. So don’t think too long, but try to answer spontaneously.

        Please push the spacebar as fast as possible when an image starts growing in size.

        Please look at the middle of the screen and try to move as little as possible.

        When you start the practice trials you will first hear the low-volume version of the scream to get acquainted with that sound too. Then the practice round will immediately start.

        <please notify the researcher before continuing>
    KeyboardComponent key_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_practice
    TextComponent practice_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You are going to practice first. Here you will NOT get to hear the loud screams yet. However, you will see on the screen when you would get to hear the loud scream if it was the real experiment.

        Try to push the spacebar as fast as possible when the images grow in size.

        Please look at the middle of the screen and move as little as possible.

        <push the right arrow button to start>
    KeyboardComponent key_resp_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine attack_feedback
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if attac and hit:
            attack_msg = "WELL DONE!!!"
        elif (condition == "Threat" and attac and not hit) or \
            (condition == "Threat" and attac and distance == "none"):
            attack_msg = "LOUD SCREAM!!!"
            time_scream = tThisFlipGlobal
            last_stim = time_scream
        elif attac and not hit:
            attack_msg = "TOO SLOW!!!"
        else:
            attack_msg = ""
            continueRoutine = False
    TextComponent feedback_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $attack_msg
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  Routine too_early
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if not early_hit:
            continueRoutine = False
        else:
            # send too early marker
            ser.write(str.encode('20'))
      End Routine:
        # clear channels
        ser.write(str.encode('00'))

        too_early_inner.finished = True
    TextComponent too_early_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = TOO EARLY!!!
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  Routine img_example
    ImageComponent image_2
      image = pics2\Safe2.png
      size = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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  Routine intro_2
    TextComponent text_3
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        If you push the spacebar fast enough, the images will not reach full size.

        When the picture starts very small, you will have more time to push the spacebar, and prevent the picture from reaching full size.

        <push the right arrow button for an example>
    KeyboardComponent key_resp_4
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_1
    TextComponent text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome! During this experiment you will see large and small images which will sometimes grow in size. When the small images start to grow, it will be your job to prevent them from reaching full size by pressing the spacebar as fast as possible

        <push the right arrow button to see an example of a large image>
    KeyboardComponent key_resp_3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine antic_ex_1
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        img_size = (x/16, y/16)
    ImageComponent image_4
      image = pics2\Threat2.png
      size [set every repeat] = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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  Routine intro_3
    TextComponent text_4
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        When the picture starts slightly bigger, you will have less time to push the spacebar. Which is why you will have to react faster.

        <push the right arrow button for an example>
    KeyboardComponent key_resp_5
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine antic_ex_2
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        img_size = (x/2, y/2)
    ImageComponent image_5
      image = pics2\Safe2.png
      size [set every repeat] = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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  Routine attack_ex_1
    ImageComponent image_3
      image = pics2\Threat2.png
      size [set every frame] = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        frame = 1
        # find the total number of frames
        total_frames = (0.25*4)*expInfo['frameRate']
      Each Frame:
        # calculate new dimensions of the image for each frame
        curr_x = x/16 + frame*(x-x/16)/total_frames
        curr_y = y/16 + frame*(y-y/16)/total_frames
        # apply new dimensions
        img_size = (curr_x, curr_y)
        frame = frame + 1
  Routine attack_ex_2
    ImageComponent image_6
      image = pics2\Safe2.png
      size [set every frame] = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = pix
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        frame = 1
        # find the total number of frames
        total_frames = (0.25*1)*expInfo['frameRate']
      Each Frame:
        # calculate new dimensions of the image for each frame
        curr_x = x/2 + frame*(x-x/2)/total_frames
        curr_y = y/2 + frame*(y-y/2)/total_frames
        # apply new dimensions
        img_size = (curr_x, curr_y)
        frame = frame + 1
  Routine intro_4
    TextComponent text_5
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = During this task you will hear loud screams. When you see a purple image, you are safe and you will not hear a scream. When you see an orange image, there is a chance that you will hear a scream. 
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    TextComponent text_6
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = <push the right arrow button>
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    TextComponent safe_text
      color = black
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
      text = Safe
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    TextComponent scream_text
      color = black
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
      text = SCREAM
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    ImageComponent image_7
      image = pics2\Safe2.png
      pos = (-0.3, 0)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image = pics2\Threat2.png
      pos = (0.3, 0)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_5
    TextComponent text_7
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The orange images will only give a scream when they reach full size. So, by preventing the orange images from reaching full size you will prevent the scream.

        Sometimes, an orange image is already full size when it is shown to you. In these cases, there is a chance that you will get to hear the loud scream, and you cannot prevent this.

        <push the right arrow button to see the full size orange image>
    KeyboardComponent key_resp_7
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine img_example_2
    ImageComponent image_9
      image = pics2\Threat2.png
      size = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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  Routine intro_6
    TextComponent text_8
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Purple images will never give loud screams, but for this experiment it remains very important that you also prevent these images from growing in size.

        So, at all times during this experiment, you should push the spacebar as fast as possible when you see that an image starts to grow in size.

        <push the right arrow button>
    KeyboardComponent key_resp_8
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_7
    TextComponent text_9
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        That concludes the first practice phase of this experiment.

        As explained before, you will hear loud screams and white noise in the real experiment. To get acquainted with these sounds you will now first hear a white noise. Afterwards we ask you to indicate how unpleasant this sound was for you.

        Please put the headphones on now.

        <push the right arrow button to hear the sound>
    KeyboardComponent key_resp_9
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startle_ex
    SoundComponent startle_sound_ex
      sound = sounds\whitenoise.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine rating_startle_ex
    SliderComponent startle_slider
      borderColor = Black
      color = Black
      forceEndRoutine = True
      granularity = 0
      labels = ("neutral", "very unpleasant")
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 100)
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    TextComponent Instructions_scream_2
      color = red
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How unpleasant was the sound that you heard?
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        #if status_slider.status == FINISHED:
        #    continueRoutine = False
      End Routine:
        win.mouseVisible = False
  Routine intro_8
    TextComponent text_10
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Next, you can get acquainted with the loud scream

        <push the right arrow button to hear the loud scream>
    KeyboardComponent key_resp_10
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine scream_ex
    SoundComponent startle_sound_ex_2
      sound = sounds\scream.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine rating_scream_ex
    SliderComponent startle_slider_2
      borderColor = Black
      color = Black
      forceEndRoutine = True
      granularity = 0
      labels = ("neutral", "very unpleasant")
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 100)
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    TextComponent Instructions_scream_3
      color = red
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How unpleasant was the scream that you heard?
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        #if status_slider.status == FINISHED:
        #    continueRoutine = False
      End Routine:
        win.mouseVisible = False
  Routine end_1
    TextComponent text_11
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the end of the task.

        A few questions will be asked now.

        You will see each image from the task again, but NO loud noises will be presented.

        <push the right arrow button to start>
    KeyboardComponent key_resp_11
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_2
    TextComponent text_12
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Thank you very much for participating in this experiment! Please notify the researcher.
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    KeyboardComponent key_resp_12
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine end_rating_pleasant
    SliderComponent pleasant_slider
      borderColor = Black
      color = Black
      forceEndRoutine = True
      granularity = 0
      labels = ("unpleasant", "neutral", "very pleasant")
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 50, 100)
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    TextComponent Instructions_pleasant
      color = green
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How pleasant did you find this picture?
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        #if pleasant_slider.status == FINISHED:
        #    continueRoutine = False
      End Routine:
        # get the item text and strip newlines/spaces
        item_text = Instructions_pleasant.text.strip()

        # write entry into custom file
        custom_q.write(expInfo['participant'] +','+ stage +','+ condition +','+ \
            distance +',NA,NA,'+ 'pic_pleasant' +','+ item_text +','+ \
            str(pleasant_slider.getRating()) +','+ str(pleasant_slider.getRT()) + '\n')

        # clear channels
        #ser.write(str.encode('00'))
  Routine end_rating_fear
    SliderComponent fear_slider
      borderColor = Black
      color = Black
      forceEndRoutine = True
      granularity = 0
      labels = ("not afraid", "very afraid")
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 100)
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    TextComponent Instructions_fear
      color = red
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How afraid did you feel when you saw this picture?
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        #if fear_slider.status == FINISHED:
        #    continueRoutine = False
      End Routine:
        # get the item text and strip newlines/spaces
        item_text = Instructions_fear.text.strip()

        # write entry into custom file
        custom_q.write(expInfo['participant'] +','+ stage +','+ condition +','+ \
            distance +',NA,NA,'+ 'pic_fear' +','+ item_text +','+ \
            str(fear_slider.getRating()) +','+ str(fear_slider.getRT()) + '\n')

        # clear channels
        #ser.write(str.encode('00'))
  Routine end_imgs
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        # define size and time factors for image
        if distance == "far":
            size_factor = 16
            time_factor = 4
        elif distance == "near":
            size_factor = 2
            time_factor = 1
        elif distance == "none":
            size_factor = 1
            time_factor = 0

        # set size of image, changes every repeat
        img_size = (x/size_factor, y/size_factor)
    ImageComponent end_img
      image [set every repeat] = $image
      size [set every repeat] = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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  Routine screamweak_ex
    SoundComponent weak_scream_ex
      sound = sounds\screamweak.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine setup
  Routine intro_1
  Routine img_example
  Routine intro_2
  Routine antic_ex_1
  Routine attack_ex_1
  Routine intro_3
  Routine antic_ex_2
  Routine attack_ex_2
  Routine intro_4
  Routine intro_5
  Routine img_example_2
  Routine intro_6
  Routine start_practice
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = conditions_practice.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'id': 1, 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'near', 'attac': True, 'startle': False, 'startle_start': 0, 'anticipation_dur': 4000, 'practice': 1},
      {'id': 2, 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'near', 'attac': True, 'startle': False, 'startle_start': 0, 'anticipation_dur': 3000, 'practice': 1},
      {'id': 3, 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'near', 'attac': True, 'startle': False, 'startle_start': 0, 'anticipation_dur': 4000, 'practice': 1},
      {'id': 4, 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'near', 'attac': True, 'startle': False, 'startle_start': 0, 'anticipation_dur': 3000, 'practice': 1},
      {'id': 5, 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'near', 'attac': False, 'startle': False, 'startle_start': 0, 'anticipation_dur': 4000, 'practice': 1},
      {'id': 6, 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'near', 'attac': False, 'startle': False, 'startle_start': 0, 'anticipation_dur': 3000, 'practice': 1},
      {'id': 7, 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'far', 'attac': True, 'startle': False, 'startle_start': 0, 'anticipation_dur': 4000, 'practice': 1},
      {'id': 8, 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'far', 'attac': True, 'startle': False, 'startle_start': 0, 'anticipation_dur': 3000, 'practice': 1}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
    Routine rest
    LoopInitiator too_early_outer loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 100000
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      LoopInitiator too_early_inner loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine anticipation
        Routine too_early
      LoopTerminator too_early_inner
    LoopTerminator too_early_outer
    Routine attack
    Routine attack_feedback
  LoopTerminator practice_trials
  Routine intro_7
  Routine startle_ex
  Routine rating_startle_ex
  Routine intro_8
  Routine scream_ex
  Routine rating_scream_ex
  Routine start_habituation
  Routine screamweak_ex
  LoopInitiator habituation_trials loopType="TrialHandler"
    conditionsFile = conditions_habituation.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id': 1, 'condition': 'Safe', 'image': 'pics2\\Safe2.png', 'distance': 'far', 'attac': True, 'startle': True, 'fix_adj': -3000, 'startle_start': 4716, 'post_startle_dur': 1640, 'anticipation_dur': 6356, 'practice': 2},
      {'id': 2, 'condition': 'Safe', 'image': 'pics2\\Safe2.png', 'distance': 'far', 'attac': False, 'startle': True, 'fix_adj': 3000, 'startle_start': 4287, 'post_startle_dur': 3132, 'anticipation_dur': 7419, 'practice': 2},
      {'id': 3, 'condition': 'Safe', 'image': 'pics2\\Safe2.png', 'distance': 'near', 'attac': True, 'startle': True, 'fix_adj': 3000, 'startle_start': 3491, 'post_startle_dur': 1232, 'anticipation_dur': 4723, 'practice': 2},
      {'id': 4, 'condition': 'Safe', 'image': 'pics2\\Safe2.png', 'distance': 'near', 'attac': False, 'startle': True, 'fix_adj': 0, 'startle_start': 5238, 'post_startle_dur': 1447, 'anticipation_dur': 6685, 'practice': 2},
      {'id': 5, 'condition': 'Safe', 'image': 'pics2\\Safe2.png', 'distance': 'none', 'attac': False, 'startle': True, 'fix_adj': 0, 'startle_start': 5229, 'post_startle_dur': 2443, 'anticipation_dur': 7672, 'practice': 2},
      {'id': 6, 'condition': 'Safe', 'image': 'pics2\\Safe2.png', 'distance': 'none', 'attac': False, 'startle': True, 'fix_adj': -3000, 'startle_start': 3857, 'post_startle_dur': 1396, 'anticipation_dur': 5253, 'practice': 2}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
    Routine rest
    Routine anticipation
    Routine attack
    Routine rating_relief
    Routine rating_scream
  LoopTerminator habituation_trials
  Routine start_real_task
  LoopInitiator task_trials loopType="TrialHandler"
    conditionsFile = conditions_task.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'id': 1, 'stage': 'task', 'condition': 'Safe', 'image': 'pics2\\Safe2.png', 'distance': 'none', 'attac': False, 'startle': True, 'fix_adj': -3000, 'startle_start': 4716, 'anticipation_dur': 6356, 'practice': 0},
      {'id': 2, 'stage': 'task', 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'near', 'attac': True, 'startle': True, 'fix_adj': 3000, 'startle_start': 4287, 'anticipation_dur': 7419, 'practice': 0},
      {'id': 3, 'stage': 'task', 'condition': 'Safe', 'image': 'pics2\\Safe2.png', 'distance': 'far', 'attac': True, 'startle': True, 'fix_adj': 3000, 'startle_start': 3491, 'anticipation_dur': 4723, 'practice': 0},
      {'id': 4, 'stage': 'task', 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'far', 'attac': False, 'startle': True, 'fix_adj': 0, 'startle_start': 5238, 'anticipation_dur': 6685, 'practice': 0},
      {'id': 5, 'stage': 'task', 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'none', 'attac': True, 'startle': True, 'fix_adj': 0, 'startle_start': 5229, 'anticipation_dur': 7672, 'practice': 0},
      {'id': 6, 'stage': 'task', 'condition': 'Safe', 'image': 'pics2\\Safe2.png', 'distance': 'near', 'attac': False, 'startle': True, 'fix_adj': -3000, 'startle_start': 3857, 'anticipation_dur': 5253, 'practice': 0},
      {'id': 7, 'stage': 'task', 'condition': 'Threat', 'image': 'pics2\\Threat2.png', 'distance': 'near', 'attac': False, 'startle': True, 'fix_adj': 3000, 'startle_start': 5394, 'anticipation_dur': 8267, 'practice': 0}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
    Routine rest
    Routine anticipation
    Routine attack
    Routine rating_relief
    Routine rating_scream
  LoopTerminator task_trials
  Routine end_1
  LoopInitiator end_trials loopType="TrialHandler"
    conditionsFile = end_q.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id': 1, 'condition': 'Threat', 'distance': 'near'},
      {'id': 2, 'condition': 'Threat', 'distance': 'far'},
      {'id': 3, 'condition': 'Threat', 'distance': 'none'},
      {'id': 4, 'condition': 'Safe', 'distance': 'near'},
      {'id': 5, 'condition': 'Safe', 'distance': 'far'},
      {'id': 6, 'condition': 'Safe', 'distance': 'none'}]
    Routine end_imgs
    Routine end_rating_fear
    Routine end_rating_pleasant
  LoopTerminator end_trials
  Routine end_2
